PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1470, 956]
  expName = ResponseEmulator
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine pauseMilneHP
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    TextComponent textPauseMilneHP
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      text = Press [enter] to hear the next clip.
      wrapWidth = 1.25
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    KeyboardComponent keyPauseMilneHP
      allowedKeys = 'return'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codePauseMilneHP
      Code Type = Auto->JS
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      Begin Routine:
        # Stop prompt if all trials are done
        if countToneMilneHP == 6:
            continueRoutine = False
  Routine breakTrain
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    TextComponent textContinueBreakTrain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        If you would like, you may now take a short break before continuing with this phase.

        Press [spacebar] to continue.
    KeyboardComponent keyBreakTrain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textStageBreakTrain
      letterHeight = 0.05
      pos = (0,0.17)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stageTrainMessage
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    CodeComponent codeBreakTrain
      Code Type = Auto->JS
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      Begin Routine:
        if ((countTrain % 92) != 0) or (countTrain == 552):
            continueRoutine = False
  Routine completeTrain
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    TextComponent textCompleteTrain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the second phase of the experiment!

        Press [spacebar] to continue.
    KeyboardComponent keyCompleteTrain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine tone
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    TextComponent textTone
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press [1], [2], or [3].
      wrapWidth = 1.25
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    CodeComponent ResponseEmulator_Keyboard
      Code Type = Both
      Before Experiment:
        class simKeys:
            '''
            an object to simulate key presses

            keyList: a list of keys to watch
            name: randomly selected from keyList
            rtRange: [min RT, max RT] where min and max RT are sepecified in ms

            '''
            def __init__(self, keyList, rtRange):
                self.name=np.random.choice(keyList)
                self.rt = np.random.choice(np.linspace(rtRange[0], rtRange[1])/1000)
      Before JS Experiment:
        class simKeys {
            constructor(keyList, rtRange) {
                this.name = keyList[Math.floor(Math.random() * keyList.length)];
                this.rt = (Math.random() * (rtRange[1] - rtRange[0]) + rtRange[0]) / 1000;
            }
        }
      Begin JS Routine:
        // Define the list to store simulated key responses
        _key_resp_allKeys = [];

        // pick an RT
        thisRT = 1;  // The RT (reaction time) is set to 6 seconds (6000 ms)
        // Initialize the simulated key variable
        simulated_key = null;

        // Initialize the simulated key press
        thisSimKey = new simKeys(['1', '2', '3'], [thisRT * 1000, thisRT * 1000]);

        // Create simKeys object and assign the simulated key
        simulated_key = thisSimKey.name;
      Begin Routine:
        # Define the list to store simulated key responses
        _key_resp_allKeys = []

        # pick an RT
        thisRT = 1  # The RT (reaction time) is set to 6 seconds (6000 ms)
        # Initialize the simulated key variable
        simulated_key = None

        # Initialize the simulated key press
        thisSimKey = simKeys(keyList=['1', '2', '3'],
            rtRange=[thisRT * 1000, thisRT * 1000])

        # Create simKeys object and assign the simulated key
        simulated_key = thisSimKey.name
      Each Frame:
        if t >= thisSimKey.rt:
            _key_resp_allKeys.extend([thisSimKey])
            # End the routine if the automated press should conclude it
            continueRoutine = False
      Each JS Frame:
        if (t >= thisSimKey.rt) {
            _key_resp_allKeys.push(thisSimKey);
            // End the routine if the automated press should conclude it
            continueRoutine = false;
        }
      End JS Routine:
        // Save the simulated key response to the data file
        psychoJS.experiment.addData('simulated_key', simulated_key);
      End Routine:
        # Save the simulated key response to the data file
        thisExp.addData('simulated_key', simulated_key)
    KeyboardComponent keyTone
      allowedKeys = '1','2','3','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine intruct_keyboard
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    TextComponent textInstruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        This script provides custom code to automate 3 types of responses: keyboard, button mouse click, and polygon mouse click.


        Look for custom code components:
        ResponseEmulator_keyboard; ResponseEmulator_button;
        ResponseEmulator_polygon

        Press [spacebar] to start.
    KeyboardComponent response_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tone_2
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    ButtonComponent buttonLeft
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0+0.1)
      save = first click
      size = [0.325,0.25]
      startVal [time (s)] = 2
      text = A
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    ButtonComponent buttonRight
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3,0+0.1)
      save = first click
      size = [0.325,0.25]
      startVal [time (s)] = 2
      text = B
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    CodeComponent ResponseEmulator_button
      Code Type = Both
      Before Experiment:
        class simMouseClick:
            '''
            An object to simulate mouse clicks on buttons

            buttonList: a list of button objects to watch
            buttonName: randomly selected from buttonList
            rt: the time (in seconds) when the simulated click should occur
            '''
            def __init__(self, buttonList, rt):
                self.button = np.random.choice(buttonList)
                self.rt = rt
      Before JS Experiment:
        class simMouseClick {
            constructor(buttonList, rt) {
                this.button = buttonList[Math.floor(Math.random() * buttonList.length)];
                this.rt = rt;
            }
        }
      Begin JS Routine:
        // Define the list to store simulated mouse clicks
        _mouse_click_all = [];

        // pick an RT
        thisRT = 1;  // The RT (reaction time) is set to 1 second (1000 ms)
        // Initialize the simulated click variable
        simulated_click = null;

        // Initialize the simulated mouse click
        thisSimClick = new simMouseClick([buttonLeft, buttonRight], thisRT);

        // Create simMouseClick object and assign the simulated button
        simulated_button = thisSimClick.button.name;
      Begin Routine:
        # Define the list to store simulated mouse clicks
        _mouse_click_all = []

        # pick an RT
        thisRT = 1  # The RT (reaction time) is set to 1 second (1000 ms)
        # Initialize the simulated click variable
        simulated_click = None

        # Initialize the simulated mouse click
        thisSimClick = simMouseClick(buttonList=[buttonLeft, buttonRight], rt=thisRT)

        # Create simMouseClick object and assign the simulated button
        simulated_button = thisSimClick.button.name
      Each Frame:
        if t >= thisSimClick.rt:
            # Simulate the mouse click
            _mouse_click_all.append(thisSimClick)
            # Simulate the button click
            thisSimClick.button.clicked = True
            thisSimClick.button.status = STARTED  # Mark the button as clicked
            # End the routine if the automated click should conclude it
            continueRoutine = False
      Each JS Frame:
        if (t >= thisSimClick.rt) {
            // Simulate the mouse click
            _mouse_click_all.push(thisSimClick);
            // Simulate the button click
            thisSimClick.button.clicked = true;
            thisSimClick.button.status = PsychoJS.Status.STARTED;  // Mark the button as clicked
            // End the routine if the automated click should conclude it
            continueRoutine = false;
        }
      End JS Routine:
        // Save the simulated button response to the data file
        psychoJS.experiment.addData('simulated_button', simulated_button);
      End Routine:
        # Save the simulated button response to the data file
        thisExp.addData('simulated_button', simulated_button)
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine feedback_button
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    TextComponent textFeedback_button
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (0,0.05+(0.125))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'key pressed was: '+thisSimClick.button.name +'\n RT was: ' +str(thisSimClick.rt)
      wrapWidth = 1.25
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  Routine feedback_keyboard
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    TextComponent textFeedback_keyboard
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'key pressed was: '+thisSimKey.name +'\n RT was: ' +str(thisSimKey.rt)
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  Routine instruc_poygon
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    TextComponent text_polygon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now, we will provide a response emulator for mouse clicks on a polygon/object.

        Press [spacebar] to start.
    KeyboardComponent response_polygon
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruc_button
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    TextComponent test_button
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Next, we will create a response emulator for a button mouse click.

        Press [spacebar] to start.
    KeyboardComponent response_button
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tone_3
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine response_polygon_2
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    PolygonComponent Bought
      fillColor [set every frame] = blue
      pos = (-0.5,0.23)
      shape = rectangle
      size = [0.25,0.07]
      startVal [time (s)] = 0
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    TextComponent textBought
      letterHeight = 0.05
      pos = (-0.5,0.23)
      startVal [time (s)] = 0
      text = bought
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    MouseComponent mouseBought
      clickable = Bought
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = name
      startVal [time (s)] = 0
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    PolygonComponent Found
      fillColor [set every frame] = blue
      pos = (-0.5,0.145)
      shape = rectangle
      size = [0.25,0.07]
      startVal [time (s)] = 0
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    TextComponent textFound
      letterHeight = 0.05
      pos = (-0.5,0.145)
      startVal [time (s)] = 0
      text = found
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    MouseComponent mouseFound
      clickable = Found
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = name
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent ResponseEmulator_polygon
      Code Type = Both
      Begin JS Routine:
        // Initialize thisSimMouse with the appropriate parameters
        thisSimMouse = new simMouseClick(['Bought', 'Found'], 1);

        // Debugging: Log the initialized object to check its properties
        console.log('Initialized thisSimMouse:', thisSimMouse);
      Begin Routine:
        # Initialize thisSimMouse with the appropriate parameters
        thisSimMouse = simMouseClick(['Bought', 'Found'], 1)

        # Debugging: Log the initialized object to check its properties
        print(f'Initialized thisSimMouse: button={thisSimMouse.button}, rt={thisSimMouse.rt}')
      Each Frame:
        # Each Frame
        # Check if the simulated mouse object is defined
        if thisSimMouse is not None and t >= thisSimMouse.rt:
            if thisSimMouse.button == 'Bought':
                # Simulate the click by changing the appearance of the polygon
                Bought.setFillColor('lightgray')  # Change color to indicate it was "clicked"
                Bought.setAutoDraw(True)  # Ensure the polygon is drawn

                # Record the simulated click
                thisExp.addData('simulated_click', 'Bought')
            elif thisSimMouse.button == 'Found':
                # Simulate the click by changing the appearance of the polygon
                Found.setFillColor('lightgray')  # Change color to indicate it was "clicked"
                Found.setAutoDraw(True)  # Ensure the polygon is drawn

                # Record the simulated click
                thisExp.addData('simulated_click', 'Found')

            # End the routine if necessary
            continueRoutine = False
      Each JS Frame:
        // Check if the simulated mouse object is defined
        if (typeof thisSimMouse !== 'undefined' && t >= thisSimMouse.rt) {
            if (thisSimMouse.button === 'Bought') {
                // Simulate the click by changing the appearance of the polygon
                Bought.setFillColor('lightgray'); // Change color to indicate it was "clicked"
                Bought.setAutoDraw(true); // Ensure the polygon is drawn

                // Record the simulated click
                psychoJS.experiment.addData('simulated_click', 'Bought');
            } else if (thisSimMouse.button === 'Found') {
                // Simulate the click by changing the appearance of the polygon
                Found.setFillColor('lightgray'); // Change color to indicate it was "clicked"
                Found.setAutoDraw(true); // Ensure the polygon is drawn

            }

            // End the routine if necessary
            continueRoutine = false;
        }
  Routine feedback_polygon
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    TextComponent textFeedback_polygon
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (0,0.05+(0.125))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'key pressed was: '+thisSimMouse.button +'\n RT was: ' +str(thisSimMouse.rt)
      wrapWidth = 1.25
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Flow
  Routine intruct_keyboard
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine tone
    Routine feedback_keyboard
  LoopTerminator trials
  Routine instruc_button
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine tone_2
    Routine feedback_button
  LoopTerminator trials_2
  Routine instruc_poygon
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine tone_3
    Routine response_polygon_2
    Routine feedback_polygon
  LoopTerminator trials_3
